PsychoPy2experiment version="1.82.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = supreff
  Units = deg
  Screen = 1
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Routines
  Routine trial
    PolygonComponent windowLeft
      fillColor = black
      stopVal [duration (s)] = 4.6
      pos = [-boxOffsetX, boxOffsetY]
      startVal [time (s)] = 0.0
      size = [boxSize, boxSize]
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    PolygonComponent windowRight
      fillColor = black
      stopVal [duration (s)] = 4.6
      pos = [boxOffsetX, boxOffsetY]
      startVal [time (s)] = 0.0
      size = [boxSize, boxSize]
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent target
      fillColor [set every repeat] = $targColour
      stopVal [duration (s)] = 3.6
      units = deg
      lineColor [set every repeat] = $targColour
      startVal [time (s)] = 1
      nVertices = 30
      size = [targSize, targSize]
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    KeyboardComponent key_upDown
      correctAns = $targCorrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'up','down'
      startVal [time (s)] = 1
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      font = Cambria
      letterHeight = 1
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      text:
        Indicate whether the red
        circle appeared above or
        below fixation.

        "up" = above
        "down" = below
    KeyboardComponent instrKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond-expt01.csv
    loopType = random
    nReps = 4
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    conditions:
      [{'maskSize': 0.46, 'targShape': 'circle', 'maskColYellow': 1, 'targColour': 'grey', 'maskSpeed': 1, 'maskShape': 'square', 'maskColBlue': 1, 'targCorrAns': 'up', 'targDir': 'left', 'maskColGrey': 0, 'targSize': 0.46, 'maskColRed': 1, 'targSpeed': 3, 'maskColGreen': 1, 'targLoc': 'above'},
      {'maskSize': 0.46, 'targShape': 'circle', 'maskColYellow': 1, 'targColour': 'grey', 'maskSpeed': 1, 'maskShape': 'square', 'maskColBlue': 1, 'targCorrAns': 'down', 'targDir': 'left', 'maskColGrey': 0, 'targSize': 0.46, 'maskColRed': 1, 'targSpeed': 3, 'maskColGreen': 1, 'targLoc': 'below'},
      {'maskSize': 0.46, 'targShape': 'circle', 'maskColYellow': 1, 'targColour': 'grey', 'maskSpeed': 1, 'maskShape': 'square', 'maskColBlue': 1, 'targCorrAns': 'up', 'targDir': 'right', 'maskColGrey': 0, 'targSize': 0.46, 'maskColRed': 1, 'targSpeed': 3, 'maskColGreen': 1, 'targLoc': 'above'},
      {'maskSize': 0.46, 'targShape': 'circle', 'maskColYellow': 1, 'targColour': 'grey', 'maskSpeed': 1, 'maskShape': 'square', 'maskColBlue': 1, 'targCorrAns': 'down', 'targDir': 'right', 'maskColGrey': 0, 'targSize': 0.46, 'maskColRed': 1, 'targSpeed': 3, 'maskColGreen': 1, 'targLoc': 'below'},
      {'maskSize': 0.46, 'targShape': 'circle', 'maskColYellow': 1, 'targColour': 'grey', 'maskSpeed': 2, 'maskShape': 'square', 'maskColBlue': 1, 'targCorrAns': 'up', 'targDir': 'left', 'maskColGrey': 0, 'targSize': 0.46, 'maskColRed': 1, 'targSpeed': 3, 'maskColGreen': 1, 'targLoc': 'above'}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
    Routine trial
  LoopTerminator trials
